PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1536, 864]
  backgroundFit = fill
  blendMode = add
  color = 1.0000, 1.0000, 1.0000
  expName = Pilot
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('LEFT_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  winBackend = pygame
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Routines
  Routine hello
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    TextComponent text
      color = -0.4902, -0.1765, 0.7647
      letterHeight = 0.06
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      wrapWidth = 10
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      text:
        A continuación, te presentaremos dos imágenes,
        una del lado derecho y una del lado izquierdo.
        Debes elegir la imagen que mejor cumpla lo que la
        instrucción te indicará.
        Escucha con atención cada instrucción y trata de
        responder tan rápido como puedas.
    ButtonComponent buttonhello
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.08
      pos = 0,-0.25
      saveStartStop = False
      size = 0.4,0.2
      startVal [time (s)] = 0
      text = INICIAR
      timeRelativeTo = experiment
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    SoundComponent sound_1
      saveStartStop = False
      sound = Stimuli/Instructions/Instrucción inicial2.ogg
      startVal [time (s)] = 0.0
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  Routine bye
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    TextComponent text_2
      color = -0.4902, -0.1765, 0.7647
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = ¡GRACIAS!
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.5
      timeRelativeTo = experiment
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  Routine Contrast_illusion_INTRO
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    TextComponent contrast_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige el círculo que te parezca
        MÁS OSCURO!
    SoundComponent sound_4
      saveStartStop = False
      sound = Stimuli/Instructions/CT_long.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_contrast
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.3,0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine ML_INTRO
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    TextComponent ml_intro_text
      color = -0.4902, -0.1765, 0.7647
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige la línea horizontal que te parezca
        ¡MÁS LARGA!
    SoundComponent sound_2
      saveStartStop = False
      sound = Stimuli/Instructions/ML_long.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_ML
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 1
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, -0.4588, -1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.3,0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine mlintro2
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    TextComponent ml_intro_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Trial II - Müller-Lyer Illusion
        Chose the LONGER line!
  Routine Ebbing_INTRO
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    TextComponent ebbing_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige el círculo naranja que te parezca
        ¡MÁS GRANDE!
    SoundComponent sound_5
      saveStartStop = False
      sound = Stimuli/Instructions/EB_long.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_ebbing
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine MS_INTRO
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    TextComponent MS_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige aquella en la que notas
        ¡MAYOR MOVIMIENTO!
    SoundComponent sound_7
      saveStartStop = False
      sound = Stimuli/Instructions/MS_long.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_MS
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine Kanizsa_INTRO
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    TextComponent kanizsa_intro_text
      color = royalblue
      letterHeight = 0.1
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1
      wrapWidth = 20
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      text:
        Elige el lado con el
        ¡CUADRADO BLANCO!
    SoundComponent sound_6
      saveStartStop = False
      sound = Stimuli/Instructions/KZS_long.ogg
      startVal [time (s)] = 1
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    ButtonComponent START_KN
      bold = True
      borderColor = black
      borderWidth = 1
      fillColor = orangered
      forceEndRoutine = True
      letterHeight = 0.05
      pos = 0, -0.3
      saveStartStop = False
      size = 0.3, 0.15
      startVal [time (s)] = 1
      text = INICIAR
      timeRelativeTo = experiment
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  Routine TEST_ML
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    ImageComponent image_ML
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_ML
      opacity = 0 
      pos = -0.44,0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_ML
      opacity = 0
      pos = 0.44, 0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_ML
      clickable = LEFT_ML, RIGHT_ML
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    SoundComponent sound_3
      saveStartStop = False
      sound = Stimuli/Instructions/ML_short.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent ML_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_left_ML
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
    RegionOfInterestComponent ROI_right_ML
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_contrast
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    ImageComponent image_cont
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_cont
      opacity = 0 
      pos = -0.44,0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_cont
      opacity = 0
      pos = 0.44, 0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_cont
      clickable = LEFT_cont, RIGHT_cont
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    SoundComponent sound_8
      saveStartStop = False
      sound = Stimuli/Instructions/CT_short.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent contrast_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_cont
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_cont
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_3
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_ebbing
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    PolygonComponent RIGHT_ebbing
      opacity = 0
      pos = 0.44, 0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_ebbing
      opacity = 0 
      pos = -0.44,0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    ImageComponent image_ebbing
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    MouseComponent mouse_ebbing
      clickable = LEFT_ebbing, RIGHT_ebbing
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    SoundComponent sound_9
      saveStartStop = False
      sound = Stimuli/Instructions/EB_short.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent ebbing_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_ebbing
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_ebbingroi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_4
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_MS
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    ImageComponent image_MS
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_MS
      opacity = 0 
      pos = -0.44,0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_MS
      opacity = 0
      pos = 0.44, 0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_MS
      clickable = LEFT_MS, RIGHT_MS
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    SoundComponent sound_10
      saveStartStop = False
      sound = Stimuli/Instructions/MS_short.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent MS_tracker
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
    RegionOfInterestComponent ROI_LEFT_MS
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_MS
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_6
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine TEST_knzs
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    ImageComponent image_KN
      image [set every repeat] = $path
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 15
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    PolygonComponent LEFT_KN
      opacity = 0 
      pos = -0.44,0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    PolygonComponent RIGHT_KN
      opacity = 0
      pos = 0.44, 0
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    MouseComponent mouse_KN
      clickable = LEFT_MS, RIGHT_MS
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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    SoundComponent sound_11
      saveStartStop = False
      sound = Stimuli/Instructions/KZS_short.ogg
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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    EyetrackerRecordComponent Kanizsa_tracker
      actionType = Start and Stop
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      syncScreenRefresh = False
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    RegionOfInterestComponent ROI_LEFT_KN
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = -0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    RegionOfInterestComponent ROI_RIGHT_KN
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = 0.44, 0
      save = every look
      saveStartStop = False
      shape = rectangle
      size = 0.86, 0.95
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    KeyboardComponent key_resp_5
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = nothing
      syncScreenRefresh = False
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  Routine pressspace
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    TextboxComponent Next_text
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.3
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Para ver la siguiente imagen
        Has click sobre EL CIRCULO ROJO
    PolygonComponent Next_polygon
      fillColor = 1.0000, -0.4588, -1.0000
      lineColor = black
      pos = (0, -0.20)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent Next_mouse
      clickable = Next_polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trainingKZS
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    ImageComponent triangle
      image = Stimuli/Training/triang.png
      pos = (-0.5, 0.25)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent threefourth
      image = Stimuli/Training/whitesquare3p4.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent twofourth
      image = Stimuli/Training/whitesquare2p4.png
      pos = (-0.3, -0.25)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent whitesquare
      image = Stimuli/Training/whitesquare.png
      pos = (0.5, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = whitesquare
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trainingKZS_2
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    ImageComponent triangle_2
      image = Stimuli/Training/triang.png
      ori = 23
      pos = -0.3, -0.25
      saveStartStop = False
      size = 0.5,0.5
      startVal [time (s)] = 0.0
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    ImageComponent threefourth_2
      image = Stimuli/Training/whitesquare3p4.png
      ori = 350
      pos = (0.5, -0.15)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent twofourth_2
      image = Stimuli/Training/whitesquare2p4.png
      pos = (0.3, 0.25)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent whitesquare_2
      image = Stimuli/Training/whitesquare.png
      ori = 45
      pos = (-0.5, 0.25)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = whitesquare_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine motor_eval
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    PolygonComponent poly_2
      fillColor = -0.4118, -1.0000, 0.0196
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, -0.20)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = poly_1, poly_2, poly_3, poly_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine clickcircle1
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    TextboxComponent circle_click_text1
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    PolygonComponent circle_click
      fillColor = green
      lineColor = green
      pos = (0.25, 0.22)
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    MouseComponent circle_mouse1
      clickable = circle_click
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle2
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    PolygonComponent circle_click_2
      fillColor = green
      lineColor = green
      pos = (-0.3, 0.1)
      saveStartStop = False
      shape = circle
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_2
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse2
      clickable = circle_click_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle3
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    PolygonComponent circle_click_3
      fillColor = green
      lineColor = green
      pos = (0.2, -0.45)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_3
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse3
      clickable = circle_click_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle5
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    PolygonComponent circle_click_5
      fillColor = green
      lineColor = green
      pos = (-0.25, 0.1)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_5
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse5
      clickable = circle_click_5
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle4
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    PolygonComponent circle_click_4
      fillColor = green
      lineColor = green
      pos = (0.45, 0.4)
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_4
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse4
      clickable = circle_click_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle6
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    PolygonComponent circle_click_6
      fillColor = green
      lineColor = green
      pos = (-0.45, -0.3)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_6
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse6
      clickable = circle_click_6
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle7
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    PolygonComponent circle_click_7
      fillColor = green
      lineColor = green
      pos = (-0.4, 0.36)
      saveStartStop = False
      shape = circle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_7
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse7
      clickable = circle_click_7
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle8
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    PolygonComponent circle_click_8
      fillColor = green
      lineColor = green
      pos = (0.1, 0.38)
      saveStartStop = False
      shape = circle
      size = (0.055, 0.055)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_8
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse8
      clickable = circle_click_8
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle9
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    PolygonComponent circle_click_9
      fillColor = green
      lineColor = green
      pos = (0.4, -0.42)
      saveStartStop = False
      shape = circle
      size = (0.055, 0.055)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_9
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse9
      clickable = circle_click_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine clickcircle10
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    PolygonComponent circle_click_10
      fillColor = green
      lineColor = green
      pos = (0.43, 0.42)
      saveStartStop = False
      shape = circle
      size = (0.055, 0.055)
      startVal [time (s)] = 0.0
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    TextboxComponent circle_click_text1_10
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Has click sobre EL CIRCULO
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    MouseComponent circle_mouse10
      clickable = circle_click_10
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine longerline_1
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    ImageComponent longerline1pic
      image = Stimuli/Training/longerline1.jpg
      saveStartStop = False
      size = 2,1
      startVal [time (s)] = 0.0
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    PolygonComponent longerline1area
      pos = -0.23, -0.30
      saveStartStop = False
      shape = rectangle
      size = (0.8, 0.32)
      startVal [time (s)] = 0.0
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    TextboxComponent Longerlinetext1
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Elige el LINEA MÁS LARGA!
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    MouseComponent longerlinemouse1
      clickable = longerline1area
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine longerline_3
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    ImageComponent longerline3pic
      image = Stimuli/Training/longerline3.jpg
      saveStartStop = False
      size = 1.9,1
      startVal [time (s)] = 0.0
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    PolygonComponent longerline3area
      pos = 0.49, -0.3
      saveStartStop = False
      shape = rectangle
      size = (1, 0.17)
      startVal [time (s)] = 0.0
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    TextboxComponent Longerlinetext3
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Elige el LINEA MÁS LARGA!
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    MouseComponent longerline3mouse
      clickable = longerline3area
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine longerline_2
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    ImageComponent longerline2pic
      image = Stimuli/Training/longerline2.jpg
      saveStartStop = False
      size = 1.9,1
      startVal [time (s)] = 0.0
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    PolygonComponent longerline2area
      pos = 0.5, 0.24
      saveStartStop = False
      shape = rectangle
      size = (0.72, 0.37)
      startVal [time (s)] = 0.0
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    TextboxComponent Longerlinetext2
      bold = True
      color = -1.0000, -1.0000, 1.0000
      editable = False
      font = Calibri
      letterHeight = 0.06
      pos = 0, 0.45
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Elige el LINEA MÁS LARGA!
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    MouseComponent longerline2mouse
      clickable = longerline2area
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine hello_training
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    PolygonComponent hellotraining_poly
      fillColor = 1.0000, -0.4588, -1.0000
      lineColor = black
      pos = (0, -0.20)
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent hellomouse
      clickable = hellotraining_poly
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextComponent hellotraining
      color = -0.4902, -0.1765, 0.7647
      letterHeight = 0.08
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Pero primero,
        ¡un poco de entrenamiento!


        Has click sobre EL CIRCULO ROJO
Flow
  Routine hello
  Routine hello_training
  Routine longerline_1
  Routine longerline_2
  Routine longerline_3
  Routine clickcircle1
  Routine clickcircle2
  Routine clickcircle3
  Routine clickcircle4
  Routine clickcircle5
  Routine clickcircle6
  Routine clickcircle7
  Routine clickcircle8
  Routine clickcircle9
  Routine clickcircle10
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimuli/randomblock.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'ML_repeat': 1, 'contrast_repeat': 0, 'ebbing_repeat': 0, 'kanizsa_repeat': 0, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 1, 'ebbing_repeat': 0, 'kanizsa_repeat': 0, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 0, 'ebbing_repeat': 1, 'kanizsa_repeat': 0, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 0, 'ebbing_repeat': 0, 'kanizsa_repeat': 1, 'MS_repeat': 0},
      {'ML_repeat': 0, 'contrast_repeat': 0, 'ebbing_repeat': 0, 'kanizsa_repeat': 0, 'MS_repeat': 1}]
    LoopInitiator A loopType="TrialHandler"
      loopType = random
      nReps = ML_repeat
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      Routine ML_INTRO
      LoopInitiator ML_rep loopType="TrialHandler"
        conditionsFile = Stimuli\Müller-Lyer trials\ML_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': '100iw_70iw.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_70iw.png', 'correctansweris': 'longer'},
          {'image': '100iw_70iw_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_70iw_R.png', 'correctansweris': 'longer'},
          {'image': '100iw_70ow.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_70ow.png', 'correctansweris': 'longer'},
          {'image': '100iw_70ow_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_70ow_R.png', 'correctansweris': 'longer'},
          {'image': '100iw_80iw.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_80iw.png', 'correctansweris': 'longer'},
          {'image': '100iw_80iw_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_80iw_R.png', 'correctansweris': 'longer'},
          {'image': '100iw_80ow.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_80ow.png', 'correctansweris': 'longer'},
          {'image': '100iw_80ow_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_80ow_R.png', 'correctansweris': 'longer'},
          {'image': '100iw_85iw.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_85iw.png', 'correctansweris': 'longer'},
          {'image': '100iw_85iw_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Müller-Lyer trials\\100iw_85iw_R.png', 'correctansweris': 'longer'}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
        Routine TEST_ML
        Routine pressspace
      LoopTerminator ML_rep
    LoopTerminator A
    LoopInitiator B loopType="TrialHandler"
      loopType = random
      nReps = contrast_repeat
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      Routine Contrast_illusion_INTRO
      LoopInitiator contrast_rep loopType="TrialHandler"
        conditionsFile = Stimuli\Contrast trials\Contrast_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'D45_L55.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D45_L55.png', 'correctansweris': 'darker'},
          {'image': 'D45_L55_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D45_L55_R.png', 'correctansweris': 'darker'},
          {'image': 'D47_L53.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D47_L53.png', 'correctansweris': 'darker'},
          {'image': 'D47_L53_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D47_L53_R.png', 'correctansweris': 'darker'},
          {'image': 'D48_L52.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D48_L52.png', 'correctansweris': 'darker'},
          {'image': 'D48_L52_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D48_L52_R.png', 'correctansweris': 'darker'},
          {'image': 'D49_L51.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D49_L51.png', 'correctansweris': 'darker'},
          {'image': 'D49_L51_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D49_L51_R.png', 'correctansweris': 'darker'},
          {'image': 'D50_L51.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\D50_L51.png', 'correctansweris': 'darker'},
          {'image': 'D50_L51_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Contrast trials\\D50_L51_R.png', 'correctansweris': 'darker'},
          {'image': 'DD_45_55.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Contrast trials\\DD_45_55.png', 'correctansweris': 'darker'}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
        Routine TEST_contrast
        Routine pressspace
      LoopTerminator contrast_rep
    LoopTerminator B
    LoopInitiator C loopType="TrialHandler"
      loopType = random
      nReps = ebbing_repeat
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      Routine Ebbing_INTRO
      LoopInitiator ebbing_rep loopType="TrialHandler"
        conditionsFile = Stimuli\Ebbinghaus trials\Ebbinghaus_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': '100b_95b.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_95b.png', 'correctansweris': 'bigger'},
          {'image': '100b_95b_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_95b_R.png', 'correctansweris': 'bigger'},
          {'image': '100b_95s.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_95s.png', 'correctansweris': 'bigger'},
          {'image': '100b_95s_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_95s_R.png', 'correctansweris': 'bigger'},
          {'image': '100b_99b.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_99b.png', 'correctansweris': 'bigger'},
          {'image': '100b_99b_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_99b_R.png', 'correctansweris': 'bigger'},
          {'image': '100b_99s.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_99s.png', 'correctansweris': 'bigger'},
          {'image': '100b_99s_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100b_99s_R.png', 'correctansweris': 'bigger'},
          {'image': '100s_70b.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100s_70b.png', 'correctansweris': 'bigger'},
          {'image': '100s_70b_R.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Ebbinghaus trials\\100s_70b_R.png', 'correctansweris': 'bigger'},
          {'image': '100s_70s.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Ebbinghaus trials\\100s_70s.png', 'correctansweris': 'bigger'}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
        Routine TEST_ebbing
        Routine pressspace
      LoopTerminator ebbing_rep
    LoopTerminator C
    LoopInitiator D loopType="TrialHandler"
      loopType = random
      nReps = kanizsa_repeat
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      Routine Kanizsa_INTRO
      Routine trainingKZS
      Routine trainingKZS_2
      LoopInitiator KN_rep loopType="TrialHandler"
        conditionsFile = Stimuli/Kanizsa trials/KN_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'Kanizsa 10a.png', 'correctanswer': 'right', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10a.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 10b.png', 'correctanswer': 'left', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10b.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 10c.png', 'correctanswer': 'right', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10c.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 10d.png', 'correctanswer': 'right', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10d.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 10e.png', 'correctanswer': 'right', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 10e.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 20a.png', 'correctanswer': 'left', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 20a.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 20b.png', 'correctanswer': 'right', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 20b.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 20c.png', 'correctanswer': 'left', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 20c.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 20d.png', 'correctanswer': 'left', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 20d.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 20e.png', 'correctanswer': 'right', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 20e.png', 'correctansweris': 'isthere'},
          {'image': 'Kanizsa 30a.png', 'correctanswer': 'left', 'path': 'Stimuli\\Kanizsa trials\\Kanizsa 30a.png', 'correctansweris': 'isthere'}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
        Routine TEST_knzs
        Routine pressspace
      LoopTerminator KN_rep
    LoopTerminator D
    LoopInitiator E loopType="TrialHandler"
      loopType = random
      nReps = MS_repeat
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      Routine MS_INTRO
      LoopInitiator MS_rep loopType="TrialHandler"
        conditionsFile = Stimuli/Moving snake trials/MS_condition_file.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'image': 'moving snake 1_2.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Moving snake trials\\moving snake 1_2.png', 'correctansweris': 'movesmore', 'set': 'B'},
          {'image': 'moving snake 1_3_mirror.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Moving snake trials\\moving snake 1_3_mirror.png', 'correctansweris': 'movesmore', 'set': 'B'},
          {'image': 'moving snake 1_4.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Moving snake trials\\moving snake 1_4.png', 'correctansweris': 'movesmore', 'set': 'B'},
          {'image': 'moving snake 1_5_mirror.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Moving snake trials\\moving snake 1_5_mirror.png', 'correctansweris': 'movesmore', 'set': 'B'},
          {'image': 'moving snake 2_3.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Moving snake trials\\moving snake 2_3.png', 'correctansweris': 'movesmore', 'set': 'B'},
          {'image': 'moving snake 2_4_mirror.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Moving snake trials\\moving snake 2_4_mirror.png', 'correctansweris': 'movesmore', 'set': 'B'},
          {'image': 'moving snake 2_5.png', 'correctanswer': 'LEFT', 'path': 'Stimuli\\Moving snake trials\\moving snake 2_5.png', 'correctansweris': 'movesmore', 'set': 'B'},
          {'image': 'moving snake 3_4_mirror.png', 'correctanswer': 'RIGHT', 'path': 'Stimuli\\Moving snake trials\\moving snake 3_4_mirror.png', 'correctansweris': 'movesmore', 'set': 'B'}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
        Routine TEST_MS
        Routine pressspace
      LoopTerminator MS_rep
    LoopTerminator E
  LoopTerminator trials
  Routine bye
